MATLABInstrumentDriver
FileVersion: 2.42
DriverName: RSA306 Driver
DriverType: MATLAB generic
InstrumentType: Spectrum Analyzer
InstrumentManufacturer: Tektronix
InstrumentModel: RSA 306
InstrumentVersion: 1.01

CreateInitCode
  Code:
    function init(obj)
    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
    if ~libisloaded('RSA300API')
        %load the DLL
        loadlibrary('RSA300API', @RSA300API_prototype_pcwin64);
    end

    if(strcmp(obj.RsrcName, ''))
        obj.DriverData.deviceID = 0;
    else
        obj.DriverData.deviceID = str2double(obj.RsrcName);
    end

ConnectInitCode
  Code:
    function init(obj)

    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
    if ~libisloaded('RSA300API')
        %load the DLL
        loadlibrary('RSA300API', @RSA300API_prototype_pcwin64);
    end

    IDs = zeros(1,100); %100 devices max
    serialNum = zeros(1,20); %allocate 20 characters for the serial number
    numDev = 0;

    %create parameter pointers
    devicePtr = libpointer('longPtr', IDs);
    serialNumPtr = libpointer('voidPtr', [uint16(serialNum) 0]); %voidPtr to hold wchar_t*
    numDevicesPtr = libpointer('int32Ptr', numDev);

    %search for the device.
    %devicePtr: Will contain an array of found devices
    %numDevicesPtr: The amount of devices found
    ReturnStatus = calllib('RSA300API', 'Search', devicePtr, serialNumPtr, numDevicesPtr);

    if (strcmp(ReturnStatus, 'noError') == 0)
        errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
        error('RSA300API:Search', 'error returned from Search: %s', errorMessage);
    end

    %place the found device IDs in an array
    deviceIDs = [];
    for i=1:numDevicesPtr.Value
        deviceIDs = [deviceIDs devicePtr.Value(i)];
    end

    serialNumber = char(serialNumPtr.Value); %convert from decimal to ASCII
    numDevices = numDevicesPtr.Value;

    if numDevices == 0
        error('no RSA306 devices detected.');
    end

    if ~strcmp(obj.DriverData.deviceID, '')
        if(obj.DriverData.deviceID + 1 > numDevices)
            error('Device ID %d does not exist. Please use a valid device ID.\nValid device IDs returned from search: %s', obj.DriverData.deviceID, num2str(deviceIDs, ' %d,'))
        end
    end

    delete(numDevicesPtr);
    delete(serialNumPtr);
    delete(devicePtr);

    ReturnStatus = calllib('RSA300API', 'Connect', obj.DriverData.deviceID);

    if (strcmp(ReturnStatus, 'noError') == 0)
        errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
        error('RSA300API:Connect', 'Attempted to connect to device %d\nError returned from Connect: %s', obj.DriverData.deviceID, errorMessage);
    end

    obj.DriverData.serialNumber = serialNumber;

CleanupCode
  Code:
    function cleanup(obj)
    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
    ReturnStatus = calllib('RSA300API', 'Disconnect');
    if (strcmp(ReturnStatus, 'noError') == 0)
        errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
        error('RSA300API:Disconnect', 'error returned from Disconnect: %s', errorMessage);
    end

Group parent
  Size: 1
  Mappings ChannelMap Command="parent1" Index="1"

  Property SerialNumber
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      propertyValue = obj.DriverData.serialNumber;
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    PermissibleType: String none
    ReadOnly: never

Group acquisition
  Size: 1
  Mappings ChannelMap Command="Acquisition1" Index="1"

  Property CenterFrequency
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      %create pointer parameter
      centerFreq = 0;
      centerFreqPtr = libpointer('doublePtr', centerFreq);

      %query the center frequency
      ReturnStatus = calllib('RSA300API', 'GetCenterFreq', centerFreqPtr);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:GetCenterFrequency', 'error returned from GetCenterFrequency: %s', errorMessage);
      end

      propertyValue = centerFreqPtr.Value;

      delete(centerFreqPtr);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      %The reference level depends on the center frequency. This function updates
      %the reference level after the center frequency is set.

      ReturnStatus = calllib('RSA300API', 'SetCenterFreq', propertyValue); %The desired operation, sets center frequency
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:SetCenterFreq', 'error returned from SetCenterFreq: %s', errorMessage);
      end
    PermissibleType: Double bounded [Max="6.2E9" Min="0.0"]
    DefaultValue: 0.0
    ReadOnly: never

  Property IQBandwidth
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      %create the parameter pointer
      iqbw = 0;
      iqbwPtr = libpointer('doublePtr', iqbw);

      %query the span
      ReturnStatus = calllib('RSA300API', 'GetIQBandwidth', iqbwPtr);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:GetIQBandwidth', 'error returned from GetIQBandwidth: %s', errorMessage);
      end

      propertyValue = iqbwPtr.Value;

      delete(iqbwPtr);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      ReturnStatus = calllib('RSA300API', 'SetIQBandwidth', propertyValue);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:SetIQBandwidth', 'error returned from SetIQBandwidth: %s', errorMessage);
      end
    PermissibleType: Double bounded [Max="4.0E7" Min="0.0"]
    DefaultValue: 0
    ReadOnly: never

  Property IQRecordLength
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      %create pointer parameter
      rec_len = 0;
      lengthPtr = libpointer('longPtr', rec_len);

      %query the IQRecordLength
      ReturnStatus = calllib('RSA300API', 'GetIQRecordLength', lengthPtr);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:GetIQRecordLength', 'error returned from GetIQRecordLength: %s', errorMessage);
      end

      propertyValue = lengthPtr.Value;

      delete(lengthPtr);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      ReturnStatus = calllib('RSA300API', 'SetIQRecordLength', propertyValue);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:SetIQRecordLength', 'error returned from SetIQRecordLength: %s', errorMessage);
      end
    PermissibleType: Double bounded [Max="5250000.0" Min="1.0"]
    DefaultValue: 1.0
    ReadOnly: never

  Property IQSampleRate
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      %create the pointer parameter
      sampleRate = 0;
      sampleRatePtr = libpointer('doublePtr', sampleRate);

      %query the IQ sampling frequency
      ReturnStatus = calllib('RSA300API', 'GetIQSampleRate', sampleRatePtr);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:GetIQSampleRate', 'error returned from GetIQSampleRate: %s', errorMessage);
      end

      propertyValue = sampleRatePtr.Value;

      delete(sampleRatePtr);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      x = propertyValue; %Constant, set is not implemented
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

Group alignment
  Size: 1
  Mappings ChannelMap Command="Alignment1" Index="1"

Group amplitude
  Size: 1
  Mappings ChannelMap Command="Amplitude1" Index="1"

  Property ReferenceLevel
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      %create pointer parameter
      refLvl = 0;
      refLvlPtr = libpointer('doublePtr', refLvl);

      %queryu the reference level
      ReturnStatus = calllib('RSA300API', 'GetReferenceLevel', refLvlPtr);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:GetReferenceLevel', 'error returned from GetReferenceLevel: %s', errorMessage);
      end

      propertyValue = refLvlPtr.Value;

      delete(refLvlPtr);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      ReturnStatus = calllib('RSA300API', 'SetReferenceLevel', propertyValue);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:SetReferenceLevel', 'error returned from SetReferenceLevel: %s', errorMessage);
      end
    PermissibleType: Double bounded [Max="30.0" Min="-130.0"]
    DefaultValue: -130.0
    ReadOnly: never

Group audio
  Size: 1
  Mappings ChannelMap Command="Audio1" Index="1"

  Property Mode
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      mode = 0;
      modePtr = libpointer('AudioDemodMode', mode);

      ReturnStatus = calllib('RSA300API', 'AUDIO_GetMode', modePtr);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:AUDIO_GetMode', 'error returned from AUDIO_GetMode: %s', errorMessage);
      end

      propertyValue = modePtr.Value;

      delete(modePtr);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      ReturnStatus = calllib('RSA300API', 'AUDIO_SetMode', propertyValue);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:AUDIO_SetMode', 'error returned from AUDIO_SetMode: %s', errorMessage);
      end
    PermissibleType: Double enum [0.0, 1.0, 2.0, 3.0, 4.0]
    DefaultValue: 0.0
    ReadOnly: never

  Property Mute
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      str = '';
      mutePtr = libpointer('voidPtr', [int8(str) 0]);

      ReturnStatus = calllib('RSA300API', 'AUDIO_GetMute', mutePtr);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:AUDIO_GetMute', 'error returned from AUDIO_GetMute: %s', errorMessage);
      end

      propertyValue = mutePtr.Value

      delete(mutePtr)
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      ReturnStatus = calllib('RSA300API', 'AUDIO_SetMute', propertyValue);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:AUDIO_SetMute', 'error returned from AUDIO_SetMute: %s', errorMessage);
      end
    PermissibleType: Boolean none
    DefaultValue: off
    ReadOnly: never

  Property Volume
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      volume = 0;
      volumePtr = libpointer('singlePtr', volume);

      ReturnStatus = calllib('RSA300API', 'AUDIO_GetVolume', volumePtr);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:AUDIO_GetVolume', 'error returned from AUDIO_GetVolume: %s', errorMessage);
      end

      propertyValue = volumePtr.Value;

      delete(volumePtr)
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      ReturnStatus = calllib('RSA300API', 'AUDIO_SetVolume', propertyValue);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:AUDIO_SetMute', 'error returned from AUDIO_SetMute: %s', errorMessage);
      end
    PermissibleType: Double bounded [Max="1.0" Min="0.0"]
    DefaultValue: 0.0
    ReadOnly: never

  Method GetData
    MCode:
      function [AudioData] = GetData(obj, maxSize)
      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
      %AudioData = zeros(1,maxSize);
      %audioDataPtr = libpointer('int16Ptr', AudioData);

      %outSize = 0;
      %outSizePtr = libpointer('uint16Ptr', outSize);

      %To Be Implemented: Currently crashes MATLAB
      %ReturnStatus = calllib('RSA300API', 'AUDIO_GetData', audioDataPtr, maxSize, outSizePtr);
      %if (strcmp(ReturnStatus, 'noError') == 0)
      %    errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
      %    error('RSA300API:AUDIO_StartAudio', 'error returned from AUDIO_StartAudio: %s', errorMessage);
      %end

      %AudioData = audioDataPtr.Value;
      %delete(audioDataPtr);
      %delete(outSizePtr);

  Method StartAudio
    MCode:
      function StartAudio(obj)
      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
      ReturnStatus = calllib('RSA300API', 'AUDIO_StartAudio')
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:AUDIO_StartAudio', 'error returned from AUDIO_StartAudio: %s', errorMessage);
      end

  Method StopAudio
    MCode:
      function StopAudio(obj)
      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
      ReturnStatus = calllib('RSA300API', 'AUDIO_StopAudio')
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:AUDIO_StopAudio', 'error returned from AUDIO_StopAudio: %s', errorMessage);
      end

Group configure
  Size: 1
  Mappings ChannelMap Command="Configure1" Index="1"

Group connection
  Size: 1
  Mappings ChannelMap Command="Connection1" Index="1"

  Method Search
    MCode:
      function [devIDs, serialNumber, numDevices] = Search(obj)
      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
      IDs = zeros(1,100); %100 devices max
      serialNum = zeros(1,20); %allocate 20 characters for the serial number
      numDev = 0;

      %create parameter pointers
      devicePtr = libpointer('longPtr', IDs);
      serialNumPtr = libpointer('voidPtr', [uint16(serialNum) 0]); %voidPtr to hold wchar_t*
      numDevicesPtr = libpointer('int32Ptr', numDev);

      %search for the device.
      %devicePtr: Will contain an array of found devices
      %numDevicesPtr: The amount of devices found
      ReturnStatus = calllib('RSA300API', 'Search', devicePtr, serialNumPtr, numDevicesPtr);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:Search', 'error returned from Search: %s', errorMessage);
      end

      %place the found device IDs in an array
      deviceIDs = [];
      for i=1:numDevicesPtr.Value
          deviceIDs = [deviceIDs devicePtr.Value(i)];
      end

      devIDs = deviceIDs;
      serialNumber = char(serialNumPtr.Value); %convert from decimal to ASCII
      numDevices = numDevicesPtr.Value;

      delete(numDevicesPtr);
      delete(serialNumPtr);
      delete(devicePtr);

Group dpx
  Size: 1
  Mappings ChannelMap Command="DPX1" Index="1"

  Method Configure
    MCode:
      function Configure(obj, spectrumEnabled, sogramEnabled)
      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
      ReturnStatus = calllib('RSA300API', 'DPX_Configure', spectrumEnabled, sogramEnabled);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:DPX_Configure', 'error returned from DPX_Configure: %s', errorMessage);
      end

  Method FindRBWRange
    MCode:
      function [minRBW, maxRBW] = FindRBWRange(obj, fspan)
      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
      min = 0.0;
      max = 0.0;
      minRBWPtr = libpointer('doublePtr', min);
      maxRBWPtr = libpointer('doublePtr', max);

      ReturnStatus = calllib('RSA300API', 'DPX_FindRBWRange', fspan, minRBWPtr, maxRBWPtr);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:DPX_FindRBWRange', 'error returned from DPX_FindRBWRange: %s', errorMessage);
      end
      minRBW = minRBWPtr.Value;
      maxRBW = maxRBWPtr.Value;

      delete(minRBWPtr);
      delete(maxRBWPtr);

  Method FinishFrameBuffer
    MCode:
      function FinishFrameBuffer(obj)
      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
      ReturnStatus = calllib('RSA300API', 'DPX_FinishFrameBuffer');
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:DPX_FinishFrameBuffer', 'error returned from DPX_FinishFrameBuffer: %s', errorMessage);
      end

  Method GetFrameBuffer
    MCode:
      function [FrameBuffer] = GetFrameBuffer(obj)
      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
      buf.fftPerFrame = 0;
      bufPtr = libpointer('DPX_FrameBuffer', buf);

      ReturnStatus = calllib('RSA300API', 'DPX_GetFrameBuffer', bufPtr);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:DPX_GetFrameBuffer', 'error returned from DPX_GetFrameBuffer: %s', errorMessage);
      end

      setdatatype(bufPtr.Value.spectrumTraces,'singlePtr', bufPtr.Value.spectrumTraceLength,3);
      setdatatype(bufPtr.Value.spectrumBitmap,'singlePtr', 1, bufPtr.Value.spectrumBitmapSize);
      setdatatype(bufPtr.Value.sogramBitmap,'uint8Ptr', 1, bufPtr.Value.sogramBitmapSize);
      setdatatype(bufPtr.Value.sogramBitmapContainTriggerArray,'int16Ptr',1,bufPtr.Value.sogramBitmapHeight);
      setdatatype(bufPtr.Value.sogramBitmapTimestampArray,'doublePtr',1,bufPtr.Value.sogramBitmapHeight);

      FrameBuffer = bufPtr.Value;
      clear bufPtr;
      clear buf;

  Method GetSettings
    MCode:
      function [Settings] = GetSettings(obj)
      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
      settings.enableSpectrum = false;
      settings.enableSpectrogram = false;
      settings.bitmapWidth = 0;
      settings.bitmapHeight = 0;
      settings.traceLength = 0;
      settings.decayFactor = 0;
      settings.actualRBW = 0;
      s = libpointer('DPX_SettingsStruct', settings);

      ReturnStatus = calllib('RSA300API', 'DPX_GetSettings', s);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:DPX_GetSettings', 'error returned from DPX_GetSettings: %s', errorMessage);
      end

      Settings = s.Value;
      clear s;
      clear settings;

  Method GetSogramHiResLine
    MCode:
      function [sogramLine, scalingFactor] = GetSogramHiResLine(obj, lineIndex, tracePoints, firstValidPoint)
      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
      sogramLine = zeros(1, tracePoints);
      sogramLineSize = 0;
      scalingFactor = 0;
      sogramLinePtr = libpointer('int16Ptr', sogramLine);
      sogramLineSizePtr = libpointer('int32Ptr', sogramLineSize);
      scalingFactorPtr = libpointer('doublePtr', scalingFactor);

      ReturnStatus = calllib('RSA300API', 'DPX_GetSogramHiResLine', sogramLinePtr, sogramLineSizePtr, lineIndex, scalingFactorPtr, tracePoints, firstValidPoint);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:DPX_GetSogramHiResLine', 'error returned from DPX_GetSogramHiResLine: %s', errorMessage);
      end

      sogramLine = sogramLinePtr.Value;
      scalingFactor = scalingFactorPtr.Value;

      clear sogramLinePtr;
      clear sogramLineSizePtr;
      clear scalingFactorPtr;

  Method GetSogramHiResLineCountLatest
    MCode:
      function [lineCount] = GetSogramHiResLineCountLatest(obj)
      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
      lineCount = 0;
      lineCountPtr = libpointer('int32Ptr', lineCount);

      ReturnStatus = calllib('RSA300API', 'DPX_GetSogramHiResLineCountLatest', lineCountPtr);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:DPX_GetSogramHiResLineCountLatest', 'error returned from DPX_GetSogramHiResLineCountLatest: %s', errorMessage);
      end

      lineCount = lineCountPtr.Value;

      clear lineCountPtr;

  Method GetSogramHiResLineTimestamp
    MCode:
      function [timestamp] = GetSogramHiResLineTimestamp(obj, lineIndex)
      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
      timestamp = 0;
      timestampPtr = libpointer('doublePtr', timestamp);

      ReturnStatus = calllib('RSA300API', 'DPX_GetSogramHiResLineTimestamp', timestampPtr, lineIndex);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:DPX_GetSogramHiResLineTimestamp', 'error returned from DPX_GetSogramHiResLineTimestamp: %s', errorMessage);
      end

      timestamp = timestampPtr.Value;

      clear timestampPtr;

  Method GetSogramHiResLineTriggered
    MCode:
      function [trigger] = GetSogramHiResLineTriggered(obj, lineIndex)
      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
      str = '';
      triggerPtr = libpointer('voidPtr', [int8(str) 0]);

      ReturnStatus = calllib('RSA300API', 'DPX_GetSogramHiResLineTriggered', triggerPtr, lineIndex);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:DPX_GetSogramHiResLineTriggered', 'error returned from DPX_GetSogramHiResLineTriggered: %s', errorMessage);
      end

      trigger = triggerPtr.Value;

      clear triggerPtr;

  Method GetSogramSettings
    MCode:
      function [Settings] = GetSogramSettings(obj)
      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
      settings.bitmapWidth = 0;
      settings.bitmapHeight = 0;
      settings.sogramTraceLineTime = 0.0;
      settings.sogramBitmapLineTime = 0.0;
      s = libpointer('DPX_SogramSettingsStruct', settings);

      ReturnStatus = calllib('RSA300API', 'DPX_GetSogramSettings', s);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:DPX_GetSettings', 'error returned from DPX_GetSettings: %s', errorMessage);
      end

      Settings = s.Value;
      clear s;
      clear settings;

  Method IsFrameBufferAvailable
    MCode:
      function [bufferAvailable] = IsFrameBufferAvailable(obj)
      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
      %create parameter pointer
      str = '';
      readyPtr = libpointer('voidPtr', [int8(str) 0]);

      ReturnStatus = calllib('RSA300API', 'DPX_IsFrameBufferAvailable', readyPtr);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:DPX_GetSettings', 'error returned from DPX_GetSettings: %s', errorMessage);
      end

      bufferAvailable = readyPtr.Value;

      delete(readyPtr);

  Method ResetDPX
    MCode:
      function ResetDPX(obj)
      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
      ReturnStatus = calllib('RSA300API', 'DPX_ResetDPx');
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:DPX_ResetDPx', 'error returned from DPX_ResetDPx: %s', errorMessage);
      end

  Method SetDPXEnabled
    MCode:
      function SetDPXEnabled(obj, dpxEnabled)
      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
      ReturnStatus = calllib('RSA300API', 'SetDPXEnabled', dpxEnabled);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:SetDPXEnabled', 'error returned from SetDPXEnabled: %s', errorMessage);
      end

  Method SetParameters
    MCode:
      function SetParameters(obj, fspan, rbw, bitmapWidth, tracePtsPerPixel, yUnit, yTop, yBottom, infinitePersistance, persistanceTimeSec, showOnlyTrigFrame)
      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
      ReturnStatus = calllib('RSA300API', 'DPX_SetParameters', fspan, rbw, bitmapWidth, tracePtsPerPixel, yUnit, yTop, yBottom, infinitePersistance, persistanceTimeSec, showOnlyTrigFrame);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:DPX_SetParameters', 'error returned from DPX_SetParameters: %s', errorMessage);
      end

  Method SetSogramParameters
    MCode:
      function SetSogramParameters(obj, timePerBitmapLine, timeResolution, maxPower, minPower)
      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
      ReturnStatus = calllib('RSA300API', 'DPX_SetSogramParameters', timePerBitmapLine, timeResolution, maxPower, minPower);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:DPX_SetSogramParameters', 'error returned from DPX_SetSogramParameters: %s', errorMessage);
      end

  Method SetSogramTraceType
    MCode:
      function SetSogramTraceType(obj, traceType)
      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
      ReturnStatus = calllib('RSA300API', 'DPX_SetSogramTraceType', traceType);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:DPX_SetSogramTraceType', 'error returned from DPX_SetSogramTraceType: %s', errorMessage);
      end

  Method SetSpectrumTraceType
    MCode:
      function SetSpectrumTraceType(obj, trace, type)
      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
      ReturnStatus = calllib('RSA300API', 'DPX_SetSpectrumTraceType', trace, type);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:DPX_SetSpectrumTraceType', 'error returned from DPX_SetSpectrumTraceType: %s', errorMessage);
      end

  Method WaitForDPXDataReady
    MCode:
      function [DataReady] = WaitForDPXDataReady(obj, timeout)
      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
      %create parameter pointer
      str = '';
      readyPtr = libpointer('voidPtr', [int8(str) 0]);

      ReturnStatus = calllib('RSA300API', 'WaitForDPXDataReady', timeout, readyPtr);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:WaitForDPXDataReady', 'error returned from WaitForDPXDataReady: %s', errorMessage);
      end

      DataReady = readyPtr.Value;

      delete(readyPtr);

Group system
  Size: 1
  Mappings ChannelMap Command="System1" Index="1"

Group trigger
  Size: 1
  Mappings ChannelMap Command="Trigger1" Index="1"

  Property IFPowerLevel
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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power = 0;
      powerPtr = libpointer('doublePtr', power);
      ReturnStatus = calllib('RSA300API', 'GetIFPowerTriggerLevel', powerPtr);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:GetIFPowerTriggerLevel', 'error returned from GetIFPowerTriggerLevel: %s', errorMessage);
      end
      propertyValue = powerPtr.Value;

      delete(powerPtr);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      ReturnStatus = calllib('RSA300API', 'SetIFPowerTriggerLevel', propertyValue);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:SetIFPowerTriggerLevel', 'error returned from SetIFPowerTriggerLevel: %s', errorMessage);
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Mode
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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
      trig = 0;
      trigPtr = libpointer('TriggerMode', trig);
      ReturnStatus = calllib('RSA300API', 'GetTriggerMode', trigPtr);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:GetTriggerMode', 'error returned from GetTriggerMode: %s', errorMessage);
      end

      propertyValue = trigPtr.Value;

      delete(trigPtr);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      ReturnStatus = calllib('RSA300API', 'SetTriggerMode', propertyValue);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:SetTriggerMode', 'error returned from SetTriggerMode: %s', errorMessage);
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Position
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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pos = 0;
      posPtr = libpointer('doublePtr', pos);
      ReturnStatus = calllib('RSA300API', 'GetTriggerPositionPercent', posPtr);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:GetTriggerPositionPercent', 'error returned from GetTriggerPositionPercent: %s', errorMessage);
      end

      propertyValue = posPtr.Value;

      delete(posPtr);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      ReturnStatus = calllib('RSA300API', 'SetTriggerPositionPercent', propertyValue);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:SetTriggerPositionPercent', 'error returned from SetTriggerPositionPercent: %s', errorMessage);
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Source
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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source = 0;
      sourcePtr = libpointer('TriggerSource', source);
      ReturnStatus = calllib('RSA300API', 'GetTriggerSource', sourcePtr);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:GetTriggerSource', 'error returned from GetTriggerSource: %s', errorMessage);
      end

      propertyValue = sourcePtr.Value;

      delete(sourcePtr);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      ReturnStatus = calllib('RSA300API', 'SetTriggerSource', propertyValue);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:SetTriggerSource', 'error returned from SetTriggerSource: %s', errorMessage);
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Property Transition
    GetMCode:
      function propertyValue = getProperty(obj, propertyName)
      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transition = 0;
      transistionPtr = libpointer('TriggerTransition', transition);
      ReturnStatus = calllib('RSA300API', 'GetTriggerTransition', transistionPtr);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:GetTriggerTransition', 'error returned from GetTriggerTransition: %s', errorMessage);
      end

      propertyValue = transistionPtr.Value;

      delete(transistionPtr);
    SetMCode:
      function set(obj, propertyName, propertyValue)
      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
      ReturnStatus = calllib('RSA300API', 'SetTriggerTransition', propertyValue);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:SetTriggerTransition', 'error returned from SetTriggerTransition: %s', errorMessage);
      end
    PermissibleType: Double none
    DefaultValue: 0
    ReadOnly: never

  Method ForceTrigger
    MCode:
      function ForceTrigger(obj)
      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ReturnStatus = calllib('RSA300API', 'ForceTrigger');
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:ForceTrigger', 'error returned from ForceTrigger: %s', errorMessage);
      end

Group waveform
  Size: 1
  Mappings ChannelMap Command="Waveform1" Index="1"

  Method GetIQData
    MCode:
      function [iqData] = GetIQData(obj, index, length)
      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
      %The index + length must be less than the IQRecordLength or will
      %attempt to acquire data outside of buffer size
      rec_len = 0;
      lengthPtr = libpointer('longPtr', rec_len);
      ReturnStatus = calllib('RSA300API', 'GetIQRecordLength', lengthPtr);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:GetIQRecordLength', 'error returned from GetIQRecordLength: %s', errorMessage);
      end
      assert((index + length) <= lengthPtr.Value, 'Input Error: index + length > IQRecordLength');

      %Get data
      memLength = zeros(1,length*2);
      %floatLength = single(memLength);
      iqBufferPtr = libpointer('singlePtr', memLength); %float pointer with proper memory allocated

      ReturnStatus = calllib('RSA300API', 'GetIQData', iqBufferPtr, index, length);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:GetIQData', 'error returned from GetIQData: %s', errorMessage);
      end

      iqData = iqBufferPtr.value; %returns array of IQ Data. The I and Q data alternates. The Q values are not complex. They need to be multiplied by sqrt(-1)

      delete(lengthPtr);
      delete(iqBufferPtr);

      %example output:

      %iqData = Ival, Qval, Ival, Qval

  Method GetIQDataDeinterleaved
    MCode:
      function [iData, qData] = GetIQDataDeinterleaved(obj, index, length)
      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%

      %The index + length must be less than the IQRecordLength or will
      %attempt to acquire data outside of buffer size
      rec_len = 0;
      lengthPtr = libpointer('longPtr', rec_len);
      ReturnStatus = calllib('RSA300API', 'GetIQRecordLength', lengthPtr);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:GetIQRecordLength', 'error returned from GetIQRecordLength: %s', errorMessage);
      end
      assert((index + length) <= lengthPtr.Value, 'Input Error: index + length > IQRecordLength');

      %Get data
      iVal = zeros(1,length);
      qVal = zeros(1,length);

      iPtr = libpointer('singlePtr', iVal);
      qPtr = libpointer('singlePtr', qVal);

      ReturnStatus = calllib('RSA300API', 'GetIQDataDeinterleaved', iPtr, qPtr, index, length);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:GetIQDataDeinterleaved', 'error returned from GetIQDataDeinterleaved: %s', errorMessage);
      end

      iData = iPtr.Value;
      qData = qPtr.Value; %not complex, needs to be multiplied by sqrt(-1)

      delete(lengthPtr);
      delete(iPtr);
      delete(qPtr);

  Method Run
    MCode:
      function Run(obj)
      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
      ReturnStatus = calllib('RSA300API', 'Run');
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:Run', 'error returned from Run: %s', errorMessage);
      end

  Method Stop
    MCode:
      function Stop(obj)
      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
      ReturnStatus = calllib('RSA300API', 'Stop');
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:Stop', 'error returned from Stop: %s', errorMessage);
      end

  Method WaitForIQDataReady
    MCode:
      function [DataReady] = WaitForIQDataReady(obj, timeout)
      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
      %create parameter pointer
      str = '';
      readyPtr = libpointer('voidPtr', [int8(str) 0]);

      %wait for data to be ready
      ReturnStatus = calllib('RSA300API', 'WaitForIQDataReady', timeout, readyPtr);
      if (strcmp(ReturnStatus, 'noError') == 0)
          errorMessage = calllib('RSA300API', 'GetErrorString', ReturnStatus);
          error('RSA300API:WaitForIQDataReady', 'error returned from WaitForIQDataReady: %s', errorMessage);
      end

      DataReady = readyPtr.Value;

      delete(readyPtr);
